PsychoPy2experiment version="3.0.6"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1200]
  color = black
  expName = EEG_Protocol_Short
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Routines
  Routine trial
    TextComponent cue
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $text
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    PolygonComponent cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent go
      letterHeight = 0.1
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 5
      text = Imagine movement
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    TextComponent rest
      letterHeight = 0.1
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 3.5
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      text:
        Stop!

        Rest
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        OK. Ready for the trial?

        Remember, you have to imagine the movement, not actually perform it!
        Imagine open and closing, not just closing.

        The movements to be imagined are:
        ->Closing left hand fingers
        ->Closing right hand fingers
        ->Closing both hands fingers
        ->Closing both feet fingers
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent thanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        This is the end of the experiment.

        Thanks!
  Routine rest_run
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        End of run

        Rest a bit before restarting.
  Routine Eyes_Closed
    TextComponent Close_Eyes
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Close eyes
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Flow
  Routine instructions
  Routine Eyes_Closed
  LoopInitiator run_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trialTypes.csv
      loopType = fullRandom
      nReps = 5
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      conditions:
        [OrderedDict([('text', 'Left Hand')]),
        OrderedDict([('text', 'Right Hand')]),
        OrderedDict([('text', 'Both Hands')]),
        OrderedDict([('text', 'Both Feet')])]
      Routine trial
    LoopTerminator trials
    Routine rest_run
  LoopTerminator run_loop
  Routine end
